PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = movingDots
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 0.030
      pos [set every repeat] = [xpos.pop(), 0]
      units = pix
      startVal [time (s)] = 1.5
      image [set every repeat] = $imgName
      size = (100, 100)
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    PolygonComponent polygon
      fillColor = $[-0.992,-0.835,0.961]
      stopVal [duration (s)] = 3.0
      pos [set every frame] = (-100+(frameN*2), 0)
      units = pix
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (20, 20)
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    PolygonComponent polygon_2
      fillColor = $[-0.976,-0.773,0.953]
      stopVal [duration (s)] = 3.0
      pos [set every frame] = (-100+frameN, 50)
      units = pix
      lineColor = $[-1.000,-1.000,-1.000]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (20, 20)
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    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 3.0
      units = pix
      lineColor = $[0.945,-1.000,-0.929]
      startVal [time (s)] = 0.0
      size = (1, 200)
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    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'm','v'
      startVal [time (s)] = 1.5
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    CodeComponent code
      Begin Experiment:
        xposList = [-500, 500] # initial list
        xposRep = np.repeat(xposList, 5) # repeat
        xpos = np.ndarray.tolist(xposRep) # change objecttype to use .pop
        shuffle(xpos) # randomise order
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 7
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    conditions:
      [{'imgName': u'gist/vrouw1.jpg', 'corrAns': u'v'},
      {'imgName': u'gist/vrouw2.jpg', 'corrAns': u'v'},
      {'imgName': u'gist/vrouw3.jpg', 'corrAns': u'v'},
      {'imgName': u'gist/vrouw4.jpg', 'corrAns': u'v'},
      {'imgName': u'gist/man1.jpg', 'corrAns': u'm'},
      {'imgName': u'gist/man2.jpg', 'corrAns': u'm'},
      {'imgName': u'gist/man3.jpg', 'corrAns': u'm'}]
    Routine trial
  LoopTerminator trials
